---
API: 2.1
Citation: Kaernbach, C. (1991). “Simple adaptive testing with the weighted up-down
  method,” Percept. Psychophys. 49, 227–229. <https://doi.org/10.3758/BF03214307>
Description: Simple adaptive testing with the weighted up-down method
OpenSesame: 3.2.7
Platform: nt
Title: 3AFC modulation test
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set stop 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/elus/Demant/+Team OMEXP - Article/ISAAR 2021/Data/experiments"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend legacy
set background black

define adaptive_next change
	set target_result answer
	set description "Starts the adaptive method procedure."

define loop cond_loop
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 frequency 400
	setcycle 0 mod_freq 5
	setcycle 1 frequency 1000
	setcycle 1 mod_freq 5
	setcycle 2 frequency 400
	setcycle 2 mod_freq 10
	setcycle 3 frequency 1000
	setcycle 3 mod_freq 10
	run condition

define sequence condition
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_adaptive_init always
	run new_sketchpad always
	run trial_loop always

define sketchpad end
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=End x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_calibration_light always
	run new_lsl_start_1 always
	run new_sketchpad_1 always
	run cond_loop always
	run end always
	run new_lsl_stop always

define inline_script generate_answer
	set description "Executes Python code"
	___run__
	import numpy as np
	from scipy.special import erf
	
	mid_point = -9
	std = 2
	
	fit_function = lambda x: 1 / 2 * (
			1 + erf(
				(x - mid_point) / (std * np.sqrt(2))
			)
		)
	
	depth = self.experiment.var.get("depth")
	prob = fit_function(depth)
	
	answer = np.random.rand() < prob
	
	self.experiment.var.set('answer', answer)
	__end__
	set _prepare ""

define sketchpad neutral
	set duration 500
	set description "Displays stimuli"
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-160 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-32 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=96 z_index=0

define sketchpad neutral_2
	set duration 500
	set description "Displays stimuli"
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-160 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-32 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=96 z_index=0

define sketchpad neutral_3
	set duration 500
	set description "Displays stimuli"
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-160 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-32 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=96 z_index=0

define adaptive_init_light new_adaptive_init
	set up_value 1
	set target_variable depth
	set target_up_down "79.4 %"
	set step_value_start 1
	set step_value_end 0.5
	set step_value_change yes
	set step_change_trial 1
	set start_track -6
	set down_value 3
	set description "Starts the adaptive method procedure."
	set change_modality Reversals

define calibration_light new_calibration_light
	set filename "white_noise.wav"
	set description "Setup the sound calibration."
	set calibration ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define lsl_start new_lsl_start_1
	set recording_path "C:\\Users\\elus\\Documents\\"
	set pupillo_checkbox no
	set mouse_checkbox no
	set keyboard_checkbox no
	set folder_name RecordingLSL_maybefinal
	set audiocapturewin_checkbox yes
	set Logger_checkbox yes

define lsl_stop new_lsl_stop

define sketchpad new_sketchpad
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=64 html=yes show_if=always text="Press a key to continue <br />or take a pause" x=0 y=0 z_index=0

define sketchpad new_sketchpad_1
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Starting.." x=0 y=0 z_index=0

define sketchpad new_sketchpad_2
	set duration 1000
	set description "Displays stimuli"

define sketchpad sig1
	set duration 500
	set description "Displays stimuli"
	draw rect color=red fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-160 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-32 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=96 z_index=0

define sketchpad sig2
	set duration 500
	set description "Displays stimuli"
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-160 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-32 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=96 z_index=0

define sketchpad sig3
	set duration 500
	set description "Displays stimuli"
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-160 z_index=0
	draw rect color=grey fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=-32 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=always w=256 x=-128 y=96 z_index=0

define inline_script sound_generation
	set description "Executes Python code"
	___run__
	from numpy import sin, pi, arange, zeros, concatenate , size
	import os
	from scipy.io import wavfile
	
	root_dir =os.getcwd()
	mod_freq = self.experiment.var.get('mod_freq')
	depth = self.experiment.var.get('depth')
	freq = self.experiment.var.get('frequency')
	position = self.experiment.var.get('position')
	
	fs = 44100
	t = arange(0, 0.5, 1/fs)
	base = sin(2 * pi * freq * t)
	target = base * (1 +  10**(depth/20) * sin(2 * pi * mod_freq * t))
	
	if position == 1:
		signal1 = concatenate((zeros(size(t)),target,zeros(4*size(t))))
		signal2 = concatenate((zeros(3*size(t)),base,zeros(2*size(t))))
		signal3 = concatenate((zeros(5*size(t)),base))
		
	elif position == 2:
		signal1 = concatenate((zeros(size(t)),base,zeros(4*size(t))))
		signal2 = concatenate((zeros(3*size(t)),target,zeros(2*size(t))))
		signal3 = concatenate((zeros(5*size(t)),base))
	else:
		signal1 = concatenate((zeros(size(t)),base,zeros(4*size(t))))
		signal2 = concatenate((zeros(3*size(t)),base,zeros(2*size(t))))
		signal3 = concatenate((zeros(5*size(t)),target))
		
	wavfile.write(root_dir+'\\signal1.wav', fs, signal1)
	wavfile.write(root_dir+'\\signal2.wav', fs,  signal2)
	wavfile.write(root_dir+'\\signal3.wav', fs, signal3)
	
	pool.add(root_dir+'\\signal1.wav', new_name=None)
	pool.add(root_dir+'\\signal2.wav', new_name=None)
	pool.add(root_dir+'\\signal3.wav', new_name=None)
	__end__
	set _prepare ""

define mixer_light stimulus
	set sound "signal1.wav,signal2.wav,signal3.wav"
	set message_start start
	set message_end stop
	set level "65.0,65.0,65.0"
	set fast yes
	set description "Play sounds in different channels with different levels and starting times"
	set dB_max_out 80
	set channels "1,2-1,2-1,2"

define inline_script tracking
	set description "Executes Python code"
	___run__
	depth = self.experiment.var.get('depth')
	self.experiment.var.set('depth', min(0, depth))
	__end__
	set _prepare ""

define sequence trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run sound_generation always
	run new_sketchpad_2 always
	run stimulus always
	run neutral always
	run sig1 always
	run neutral_2 always
	run sig2 always
	run neutral_3 always
	run sig3 always
	run generate_answer always
	run new_logger always
	run change always
	run tracking always

define loop trial_loop
	set source table
	set repeat 12
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	setcycle 0 position 1
	setcycle 1 position 2
	setcycle 2 position 3
	run trial

